PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = black
  colorSpace = hex
  expName = oddball_pirates
  keyboardBackend = PsychToolbox
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Routines
  Routine Welcome_Message
    TextComponent Welcome2
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Welcome to the experiment!
        Press the space bar to start.
    KeyboardComponent keywelcome2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine break_2
    TextComponent breakk
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ex_fixation
    ImageComponent fixationcross_2
      image = fixation_cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent P1_2
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P2_2
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P3_2
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P4_2
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P5_2
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P6_2
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent spacebar1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions1
      letterHeight = 0.02
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
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      text:
        First, 6 grey objects will appear
        arranged in a circle. At the
        center, there will be a fixation cross.

        Press the spacebar to continue ~ you
        will not be required to press the
        spacebar during the experiment
  Routine ex_highlight
    ImageComponent P1_3
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P2_3
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P3_3
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P4_3
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P5_3
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent P6_3
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent ex_target
      image = stim_red_targetID/pirate5_silred.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent spacebar1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.02
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
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      text:
        Next, one of the object
        will turn pink to indicate where to
        maintain your gaze. This is the target object.
        Please continue to stare at the target object.

        Press the spacebar to continue
        ~ you will not be required to
        press the spacebar during the
        experiment
  Routine routine_1stbreak
  Routine break1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After various trials, another object will highlight pink to indicate which object to look at and count the presentations of next.

        Feel free to ask the facilitator any questions.

        Otherwise, press the spacebar to begin the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_
  Routine instructions_2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Finally, each object will randomly change
        colours and flip upside down.
        Remember to maintain your gaze on the
        target object, no matter which object
        changes colour or flips upside down.
        Please count how many times the target
        object appears.

        Press space to begin the demonstration.
        You will not be required to press the
        spacebar during the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ex_highlight_2
    ImageComponent P1
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P2
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P3
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P4
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P5
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P6
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent ex_target_3
      image = stim_red_targetID/pirate3_silred.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine ex
    ImageComponent P1_5
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P2_5
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P3_5
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P4_5
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P5_5
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P6_5
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent ex_target_4
      image [set every repeat] = $stim_trial
      ori = 180
      pos [set every repeat] = stim_loc
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent text_6
      disabled = True
      letterHeight = 0.03
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text:
        Finally each silhouette will
        appear at random. Remember to maintain
        your attention on the target silhouette and
        count how many times the target silhouette
        appears, no matter which silhouette appears.

        You will not be required to press the
        spacebar during the experiment.
  Routine ex_sil
    ImageComponent P1_4
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P2_4
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P3_4
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P4_4
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P5_4
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent P6_4
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent ex_target_2
      image [set every repeat] = $stim_trial
      ori = 180
      pos [set every repeat] = stim_loc
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent text_3
      disabled = True
      letterHeight = 0.03
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text:
        Finally each silhouette will
        appear at random. Remember to maintain
        your attention on the target silhouette and
        count how many times the target silhouette
        appears, no matter which silhouette appears.

        You will not be required to press the
        spacebar during the experiment.
  Routine Fixation_cross_2
    ImageComponent fixationcross
      image = fixation_cross_1.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil1
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil2
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil3
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil4
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil5
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil6
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Target_Highlight_2
    ImageComponent sil1_2
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil2_2
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil3_2
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil4_2
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil5_2
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil6_2
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent redhighlight
      image [set every repeat] = $stim_redtargetID
      pos [set every repeat] = stim_location
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ParallelOutComponent p_port_2
      address = 0x4FF8
      register = EIO
      startData = $trigger_code
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine Trial_2
    ImageComponent sil1_3
      image = stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil2_3
      image = stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil3_3
      image = stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil4_3
      image = stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil5_3
      image = stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil6_3
      image = stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent stim
      image [set every repeat] = $stim_trial
      ori [set every repeat] = orientation
      pos [set every repeat] = stim_loc
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent p_port
      address = 0x4FF8
      register = EIO
      startData = $code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine Silhouette_end
    TextComponent silend
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of part 1.

        Part two is identical to part 1, but the objects will be replaced by various pirate faces. These faces will be either white or green and upright or upside down, just like the objects in part 1.

        Remember to maintain your focus on the highlighted object.

        Click the space bar to see an example.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example_end
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of silhouettes

        Press the spacebar to continue onto the faces
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finish
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That concludes the experiment!

        Thank you for participating.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Take at least a minute to rest.
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 60
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      text:
        Required break finished.

        Once you feel refreshed, press the spacebar to continue with the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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  Routine Fixation_cross
    ImageComponent fixationcross_3
      image = images/fixation_cross_pink.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil1_4
      image = images/stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil2_4
      image = images/stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil3_4
      image = images/stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil4_4
      image = images/stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil5_4
      image = images/stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil6_4
      image = images/stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Target_Highlight
    ImageComponent sil1_5
      image = images/stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil2_5
      image = images/stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil3_5
      image = images/stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil4_5
      image = images/stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil5_5
      image = images/stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sil6_5
      image = images/stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent highlight_
      image [set every repeat] = $highlight
      pos [set every repeat] = stim_location
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ParallelOutComponent p_port_3
      address = 0x4FF8
      disabled = True
      register = EIO
      startData = $trigger_code
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine Trial
    ImageComponent sil1_6
      image = images/stim_silhouettes/pirate1_sil.png
      pos = (0, 0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil2_6
      image = images/stim_silhouettes/pirate2_sil.png
      pos = (0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil3_6
      image = images/stim_silhouettes/pirate3_sil.png
      pos = (0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil4_6
      image = images/stim_silhouettes/pirate4_sil.png
      pos = (0, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil5_6
      image = images/stim_silhouettes/pirate5_sil.png
      pos = (-0.3, -0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent sil6_6
      image = images/stim_silhouettes/pirate6_sil.png
      pos = (-0.3, 0.15)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent stim_2
      image [set every repeat] = $stim_trial
      ori [set every repeat] = orientation
      pos [set every repeat] = stim_loc
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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    ParallelOutComponent p_port_4
      address = 0x4FF8
      disabled = True
      register = EIO
      startData = $code
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine Welcome_Message
  LoopInitiator Runs_1 loopType="TrialHandler"
    conditionsFile = stimulus_conditions_sil.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditions': 'white_inverted_sil.xlsx', 'orientation': 180},
      {'conditions': 'green_inverted_sil.xlsx', 'orientation': 180},
      {'conditions': 'white_upright_sil.xlsx', 'orientation': 0},
      {'conditions': 'green_upright_sil.xlsx', 'orientation': 0}]
    LoopInitiator Blocks_1 loopType="TrialHandler"
      conditionsFile = target_highlight.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'highlight': 'Target_highlight/pirate1.png', 'stim_location': (0, 0.3), 'trigger_code': 191},
        {'highlight': 'Target_highlight/pirate2.png', 'stim_location': (0.3, 0.15), 'trigger_code': 192},
        {'highlight': 'Target_highlight/pirate3.png', 'stim_location': (0.3, -0.15), 'trigger_code': 193},
        {'highlight': 'Target_highlight/pirate4.png', 'stim_location': (0, -0.3), 'trigger_code': 194},
        {'highlight': 'Target_highlight/pirate5.png', 'stim_location': (-0.3, -0.15), 'trigger_code': 195},
        {'highlight': 'Target_highlight/pirate6.png', 'stim_location': (-0.3, 0.15), 'trigger_code': 196}]
      Routine Fixation_cross
      Routine Target_Highlight
      LoopInitiator Trials_1 loopType="TrialHandler"
        conditionsFile = $conditions
        loopType = random
        nReps = 5
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        Routine Trial
      LoopTerminator Trials_1
    LoopTerminator Blocks_1
    Routine Break
  LoopTerminator Runs_1
  Routine Example_end
  LoopInitiator Runs_2 loopType="TrialHandler"
    conditionsFile = stimulus_conditions_pirates.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'conditions': 'green_upright_pirates.xlsx', 'orientation': 0},
      {'conditions': 'white_upright_pirates.xlsx', 'orientation': 0},
      {'conditions': 'green_inverted_pirates.xlsx', 'orientation': 180},
      {'conditions': 'white_upright_pirates.xlsx', 'orientation': 180}]
    LoopInitiator Blocks_2 loopType="TrialHandler"
      conditionsFile = target_highlight.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'highlight': 'Target_highlight/pirate1.png', 'stim_location': (0, 0.3), 'trigger_code': 191},
        {'highlight': 'Target_highlight/pirate2.png', 'stim_location': (0.3, 0.15), 'trigger_code': 192},
        {'highlight': 'Target_highlight/pirate3.png', 'stim_location': (0.3, -0.15), 'trigger_code': 193},
        {'highlight': 'Target_highlight/pirate4.png', 'stim_location': (0, -0.3), 'trigger_code': 194},
        {'highlight': 'Target_highlight/pirate5.png', 'stim_location': (-0.3, -0.15), 'trigger_code': 195},
        {'highlight': 'Target_highlight/pirate6.png', 'stim_location': (-0.3, 0.15), 'trigger_code': 196}]
      Routine Fixation_cross
      Routine Target_Highlight
      LoopInitiator Trials_2 loopType="TrialHandler"
        conditionsFile = $conditions
        isTrials = False
        loopType = random
        nReps = 5
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        Routine Trial
      LoopTerminator Trials_2
    LoopTerminator Blocks_2
    Routine Break
  LoopTerminator Runs_2
  Routine Finish
